CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "Illumination_B")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Sample>.*)_(?P<Marker>.*)_(?P<Name>.*)_(?P<Type>.*)\.(?P<File>.*)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "CD")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Marker>.*)_(?P<Name>.*)_(?P<Type>.*)\.(?P<File>.*)
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "MultDNA")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Probability_map
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Type

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Probability_map
    Name the output image:IllumR
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:6|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
    Select the type of image to save:Image
    Select the image to save:IllumR
    Select method for constructing file names:Single name
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    Enter single file name:ILLUM
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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