CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Sample>.*)_(?P<Marker>.*)_(?P<Type>.*)\.tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Img
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Type

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Img
    Name the output image:IllumImg
    Select how the illumination function is calculated:Background
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    Block size:1
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:6|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
    Select the type of image to save:Image
    Select the image to save:IllumImg
    Select method for constructing file names:Single name
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    Enter single file name:ILLUM_B
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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