CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Select again all the files in the `tiff` folder']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
    Filter images?:Custom
    Select the rule criteria:or (file does startwith "ILLUM") (file does contain "Probabilities.tiff")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^site(?P<Site>[0-9]+)_
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "MultDNA")
    Name to assign these images:Nuc_prob
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "ILLUM")
    Name to assign these images:illum_R
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:Nuc_prob
    Name the output image:Corr_Nuc
    Select the illumination function:illum_R
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Corr_Nuc
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:8|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
    Select the objects to filter:Nuclei
    Name the output objects:NucFil
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5.0
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:9|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
    Select the input objects:NucFil
    Name the output image:NucleiObjImg
    Select the color format:uint16
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
ErodeObjects:[module_num:10|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
    Select the input object:NucFil
    Name the output object:ErodeNuclei
    Structuring element:Disk,1
    Prevent object removal:Yes
    Relabel resulting objects:No

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:ErodeNuclei
    Name the output image:NucleiMask
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:NucleiMask
    Select method for constructing file names:Single name
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    Enter single file name:NucleiMask
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:NucleiObjImg
    Select method for constructing file names:Single name
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    Enter single file name:NucleiObjectImage
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    Saved file format:h5
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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