CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Select again all the files in the `tiff` folder']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "Prediction") (file does contain "Nuclei")
    Name to assign these images:Nuc_prob
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does startwith "Prediction") (file doesnot contain "Nuclei")
    Name to assign these images:Marker_prob
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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enabled:False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
    Select the input image:ProbabStack
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Cell_surf
    Convert green to gray?:Yes
    Name the output image:backgroud
    Convert blue to gray?:Yes
    Name the output image:nuclei
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
SaveImages:[module_num:6|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Cell_surf
    Select method for constructing file names:Single name
    Select image name for file prefix:ProbabStack
    Enter single file name:OrigCellSurf
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    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ImageMath:[module_num:7|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Nuc_cell
    Image or measurement?:Image
    Select the first image:Marker_prob
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Nuc_prob
    Multiply the second image by:1.0
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
Smooth:[module_num:8|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
    Select the input image:Nuc_prob
    Name the output image:NucFil
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:NucFil
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,20
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:5
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:11|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
    Select the objects to filter:Nuclei
    Name the output objects:NucFil
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5.0
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:NucFil
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Marker_prob
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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    Log transform before thresholding?:No
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
Threshold:[module_num:13|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
    Select the input image:Marker_prob
    Name the output image:Thresh_cell
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.5
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
Opening:[module_num:14|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
    Select the input image:Thresh_cell
    Name the output image:CellMask
    Structuring element:Diamond,1

MaskObjects:[module_num:15|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notes:['Remove object that are outside the region of the cell probability map']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
    Select objects to be masked:Cells
    Name the masked objects:MaskedCells
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:CellMask
    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Retain
    Invert the mask?:No

OverlayObjects:[module_num:16|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
    Input:Marker_prob
    Name the output image:OverlayCells
    Objects:MaskedCells
    Opacity:0.5

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Marker_prob
    Name the output image:ObjsOutline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#12FA05
    Select objects to display:MaskedCells

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:ObjsOutline
    Select method for constructing file names:Single name
    Select image name for file prefix:Marker_prob
    Enter single file name:CellOutline
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    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:OverlayCells
    Select method for constructing file names:Single name
    Select image name for file prefix:Marker_prob
    Enter single file name:OverlayCells
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    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:20|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
    Select the input objects:MaskedCells
    Name the output image:CellImage
    Select the color format:Grayscale
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:Single name
    Select image name for file prefix:Marker_prob
    Enter single file name:Cell_Object_Image
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    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:22|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
    Select the input objects:MaskedCells
    Name the output image:CellMaskImage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:CellMaskImage
    Select method for constructing file names:Single name
    Select image name for file prefix:Marker_prob
    Enter single file name:CellMaskImage
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    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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