CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CD20")
    Name to assign these images:CD20
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD3")
    Name to assign these images:CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD4")
    Name to assign these images:CD4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Histone")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Tcell
    Image or measurement?:Image
    Select the first image:CD3
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CD4
    Multiply the second image by:1.0
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InverCD20
    Image or measurement?:Image
    Select the first image:CD20
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertTcell
    Image or measurement?:Image
    Select the first image:Tcell
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:8|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NucMultCD20
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:InverCD20
    Multiply the second image by:1.0
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
ImageMath:[module_num:9|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:MultDNA
    Image or measurement?:Image
    Select the first image:NucMultCD20
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:InvertTcell
    Multiply the second image by:1.0
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
CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:MultDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:6
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:11|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
    Select the input image:MultDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:CorrDNA
    Select method for constructing file names:Single name
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    Enter single file name:CorrDNA
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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