CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your workspace, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Load the images by matching files in the folder against the unique text pattern for each stain: D.TIF for DAPI, F.TIF for the FITC image, R.TIF for the rhodamine image. The three images together comprise an image set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Histone")
    Name to assign these images:OrigH3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD20")
    Name to assign these images:OrigCD20
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD8a")
    Name to assign these images:OrigCD8a
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:OrigH3
    Name the output image:CropH3
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:300,500
    Top and bottom rectangle positions:200,400
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    Remove empty rows and columns?:All
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
Crop:[module_num:6|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
    Select the input image:OrigCD20
    Name the output image:CropCD20
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropH3
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
Crop:[module_num:7|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
    Select the input image:OrigCD8a
    Name the output image:CropCD8a
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropH3
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
Threshold:[module_num:8|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
    Select the input image:CropH3
    Name the output image:Threshold_H3
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Otsu

Threshold:[module_num:9|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
    Select the input image:CropCD20
    Name the output image:Threshold_CD20
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Otsu

Threshold:[module_num:10|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enabled:False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
    Select the input image:CropCD8a
    Name the output image:Threshold_CD8a
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:20
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:11|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:CropH3
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,55
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
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    Size of adaptive window:50
    Lower outlier fraction:0.10
    Upper outlier fraction:0.25
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
    Thresholding method:Robust Background

IdentifySecondaryObjects:[module_num:12|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notes:['Identify the cells by using the nuclei as a "seed" region, then growing outwards until stopped by the image threshold or by a neighbor. The Distance-B method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:CD20_Markers
    Select the method to identify the secondary objects:Distance - B
    Select the input image:CropCD20
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:Nuclei
    Name the objects to be identified:CD8a_Markers
    Select the method to identify the secondary objects:Distance - B
    Select the input image:CropCD20
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CropH3
    Name the output image:H3_Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#2DF709
    Select objects to display:Nuclei

OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CropCD20
    Name the output image:CD20_Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#16F40B
    Select objects to display:Nuclei
    Select outline color:#F906F9
    Select objects to display:CD20_Markers

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CropCD8a
    Name the output image:CD8a_Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#0AF51C
    Select objects to display:Nuclei
    Select outline color:#F709F0
    Select objects to display:CD8a_Markers

SaveImages:[module_num:17|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notes:['Save the color image as an 8-bit TIF, appending the text RBG to the original filename of the DAPI image.']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
    Select the type of image to save:Image
    Select the image to save:CD20_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigCD20
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Segmented
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:CD8a_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigCD8a
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Segmented
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:CD8a_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigCD8a
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Segmented
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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